PsychoPy2experiment version="3.2.4"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = $[-1.000,-1.000,-1.000]
  expName = ppp
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Routines
  Routine trial
    PolygonComponent polygon
      fillColor [set every frame] = $[1.000,1.000,1.000]
      pos = (-0.3, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    PolygonComponent polygon_2
      fillColor [set every frame] = $[1.000,1.000,1.000]
      pos = (0.3, 0)
      shape = rectangle
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3
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    CodeComponent code
      Code Type = Py
      Each Frame:
        # peiyu code
        f1 = 5
        phi1 = 0
        amp1 = (sin(2*pi*f1*frameN/60) - 0.5)*2
        f2 = 20
        phi2 = 0
        amp2 = (sin(2 * pi * f2 * frameN / 60) - 0.5) * 2
        polygon.setFillColor([amp1, amp1, amp1])
        polygon_2.setFillColor([amp2, amp2, amp2])
  Routine instr
    TextComponent text
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        脑机接口

        视觉刺激实验

        按"空格"继续
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instr
  Routine trial
